CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Here add brightfield and corresponding fluorescence images.', '', 'Brightfield images are used for thresholding to prevent fluorescence variation from influencing thresholding.', '', 'Put rule criteria to match your images.']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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "BF") (file doesnot contain ".nd") (file does contain "GFP")

Metadata:[module_num:2|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notes:['Construct a metadata expression to match how you (and your imaging software) have named your images']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Strain>.*)_.*_s(?P<Order>.*).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here you need to identify the brightfield or fluorescence images.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Strain

CorrectIlluminationCalculate:[module_num:5|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notes:['Illumination correction for fluorescence image.', '', 'Adjust ‘block size’ to match image resolution. Each block should contain non-object pixels. If a block can fit inside an embryo object, you must make the block larger. Check that the output does not have any bright anomalies.']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
    Select the input image:GFP
    Name the output image:IllumFuncGFP
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Correct brightfield illumination.']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
    Select the input image:BF
    Name the output image:IllumFuncBF
    Select how the illumination function is calculated:Background
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    Block size:180
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:7|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notes:['Apply both illumuination corrections.']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
    Select the input image:GFP
    Name the output image:CorrGFP
    Select the illumination function:IllumFuncGFP
    Select how the illumination function is applied:Subtract
    Select the input image:BF
    Name the output image:CorrBF
    Select the illumination function:IllumFuncBF
    Select how the illumination function is applied:Subtract

EnhanceEdges:[module_num:8|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notes:['For thresholding from brightfield; enhance edges makes object outlines stand out as white on black background to allow thresholding.']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
    Select the input image:CorrBF
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:9|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notes:['We smooth to fill in any gaps in the edges of embryo objects. You may need to adjust artifact diameter to suit your image resolution.']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
    Select the input image:EdgedImage
    Name the output image:BFthresh
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Identify embryos. Embryos will be separated by shape (this works well for embryos due to very regular shape). ', '', 'Adjust diameter interval to suit your image resolution/magnification.']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
    Select the input image:BFthresh
    Name the primary objects to be identified:embryos
    Typical diameter of objects, in pixel units (Min,Max):64,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:11|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notes:['We measure the initially identified embryos in order to provide for further filtering downstream.']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
    Select objects to measure:embryos
    Calculate the Zernike features?:No

FilterObjects:[module_num:12|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notes:['Now we can filter based on the form factor. This selects for round objects (like embryos) and will discard much irregularly-shaped debris in the images.']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
    Select the objects to filter:embryos
    Name the output objects:FilteredEmbryos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Now we measure our filtered embryo objects.']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
    Select objects to measure:FilteredEmbryos
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|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notes:['And we measure their intensity in the illumination-corrected fluorescence image.']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
    Hidden:1
    Select an image to measure:CorrGFP
    Select objects to measure:FilteredEmbryos

OverlayOutlines:[module_num:15|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notes:['We will output an outline image with the object number printed on it so that data can be manually curated to ensure proper thresholding, or to allow post-hoc synchronisation of embryos (e.g. by pickint out data rows that correspond to early embryos, as idenfitied in the outline image).', '', 'First we stretch the BF image intensity so that it will be readily visible.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BF
    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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
DisplayDataOnImage:[module_num:16|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notes:['Print object numbers on the outline image.']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
    Display object or image measurements?:Object
    Select the input objects:FilteredEmbryos
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):18
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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notes:['Save the outline images. Use these images for manual curation of the data.']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CPImageNo
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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notes:['E']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:FilteredEmbryos|Intensity_UpperQuartileIntensity_CorrGFP,FilteredEmbryos|Intensity_IntegratedIntensity_CorrGFP,FilteredEmbryos|Intensity_MaxIntensity_CorrGFP,FilteredEmbryos|Intensity_MedianIntensity_CorrGFP,FilteredEmbryos|Intensity_MeanIntensity_CorrGFP,FilteredEmbryos|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:FilteredEmbryos
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
