CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Load brightfield images of worms for constructing a training set.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "BF")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:BF
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['These two modules correct any illumination biases which may hinder identification of the worms.']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
    Select the input image:BF
    Name the output image:IllumBF
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:6|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notes:['These two modules correct any illumination biases which may hinder identification of the worms.']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
    Select the input image:BF
    Name the output image:CorrBF
    Select the illumination function:IllumBF
    Select how the illumination function is applied:Subtract

EnhanceEdges:[module_num:7|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notes:['To identify the worms, we identify the edges, which makes the worm outlines stand out as white on a black background.']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
    Select the input image:CorrBF
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:8|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notes:['Here we blur it a bit to fill gaps.']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
    Select the input image:EdgedImage
    Name the output image:SmoothEdgedBF
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:9|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notes:['And now we identify the worms. Here we want to make binary images to create a training set. As such we want to ensure we filter out any objects that are the wrong size and leave only well thresholded single worms.']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
    Select the input image:SmoothEdgedBF
    Name the primary objects to be identified:Worms
    Typical diameter of objects, in pixel units (Min,Max):48,66
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:10|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notes:['We measure the shape features to provide an extra filtering step below.']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
    Select objects to measure:Worms
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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notes:['Filtering by the eccentricity filters out any debris within the size range, as it will not tend to be as long and sausafe']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
    Select the objects to filter:Worms
    Name the output objects:Filteredworms
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.85
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:12|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
    Select the input image:SmoothEdgedBF
    Name the output image:MaskBF
    Use objects or an image as a mask?:Objects
    Select object for mask:Filteredworms
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    Invert the mask?:No

Threshold:[module_num:13|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
    Select the input image:MaskBF
    Name the output image:BinaryBF
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.00000000000000001
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:BinaryBF
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Image_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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