CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Put your brightfield images in here. Worms can touch - the untangle worms module will try to untangle them using the training set you produced from the make binary - training pipelines.']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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "TIF")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Session>.*)_.*_s(?P<Site>.*).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:BF
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['']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
    Select the input image:BF
    Name the output image:IllumBF
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:BF
    Name the output image:CorrBF
    Select the illumination function:IllumBF
    Select how the illumination function is applied:Subtract

EnhanceEdges:[module_num:7|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
    Select the input image:CorrBF
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:8|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
    Select the input image:EdgedImage
    Name the output image:SmoothEdgedBF
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Here we identify the worm objects. Now because we are untangling worms we are happy to accept overly large clusters of worms, or those touching the border of an image.']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
    Select the input image:SmoothEdgedBF
    Name the primary objects to be identified:Worms
    Typical diameter of objects, in pixel units (Min,Max):80,140
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:10|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
    Select the input image:CorrBF
    Name the output image:MaskBF
    Use objects or an image as a mask?:Objects
    Select object for mask:Worms
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    Invert the mask?:No

Threshold:[module_num:11|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
    Select the input image:MaskBF
    Name the output image:BinaryBF
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.00000000000000001
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
UntangleWorms:[module_num:12|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
    Select the input binary image:BinaryBF
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Elsewhere...|
    Training set file name:L1TrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:NonOverlappingWorms
    Calculate the Zernike features?:Yes

RescaleIntensity:[module_num:14|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
    Select the input image:CorrBF
    Name the output image:RescaledBF
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledBF
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NonOverlappingWorms

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:NonOverlappingWorms
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):30
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CPImageNo._
    Number of digits:2
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:NonOverlappingWorms|Worm_Length,NonOverlappingWorms|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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