CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Add the manually curated good binary images from the make binary pipeline.']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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "tif")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:BF
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['We threshold to make the image binary and feed to Untangle Worms.']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
    Select the input image:BF
    Name the output image:ThreshBlue
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.00000000001
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
UntangleWorms:[module_num:6|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
    Select the input binary image:ThreshBlue
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Output Folder|
    Training set file name:L1TrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Train
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400
